PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '999', 'run': '999'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1536, 864]
  expName = video_presentation
  keyboardBackend = ioHub
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Routines
  Routine waiting_for_scanner
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    KeyboardComponent key_resp_start
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        from glob import glob
        import pandas as pd
        import numpy as np
        import os


        num_stimuli = 100
      Begin Experiment:
        participant = expInfo['participant']
        session = expInfo['session']
        run = expInfo['run']

        # Get images
        video_path = f"videos"
        video_list = os.listdir(video_path)

        # Intialize dataframe
        df = pd.DataFrame()
        df["file"] = video_list
        #df["trial"] = [file.split(".")[0] for file in df["file"]]
        #df["type"] = ["image" if ".png" in file else "video" for file in df["file"]]
        #df["category"] = [file.split("_")[0] for file in df["file"]]
        df["onset"] = np.empty(len(video_list)) * np.nan
        df["duration"] = np.empty(len(video_list)) * np.nan
        df["rating"] = np.empty(len(video_list)) * np.nan
        df["response_time"] = np.empty(len(video_list)) * np.nan


        # Get 150 videos at random
        random_indices = np.random.choice(np.arange(len(video_list)), size=num_stimuli, replace=False)
        df = df.iloc[random_indices, :]

        # Random shuffle
        df = df.sample(frac=1).reset_index(drop=True)
      End Routine:
        timer = core.Clock(0)
    TextComponent text
      color = black
      flip = horiz
      letterHeight = 0.04
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        The experiment will begin soon.

        After each video, you will see a black square. You will have 5 seconds to make a rating on the remote according to the scale shown below.
    ImageComponent instruction_image
      flipHoriz = True
      image = images/rating_instruction.png
      pos = (0, -0.15)
      size = (0.75, 0.5)
      startVal [time (s)] = 0.0
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  Routine dummy
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    PolygonComponent dummy_fixation_cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine end
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    TextComponent end_text
      color = black
      flip = horiz
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Run complete.
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  Routine video_trial
    RoutineSettingsComponent video_trial
      disabled = True
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    CodeComponent video_trial_code
      Code Type = Py
      Begin Routine:
        if ".mp4" not in df["file"][trials.thisN]:
            is_active = False
            continueRoutine = False
        else:
            is_active = True


        if is_active:
            df.at[trials.thisN, "onset"] = timer.getTime()
      End Routine:
        if is_active:
            df.at[trials.thisN, "duration"] = timer.getTime() - df.at[trials.thisN, "onset"]
            df.to_csv("df.txt", index_label="index")
  Routine washout
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    PolygonComponent washout_fixation_cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent save_data
      Code Type = Py
      Begin Routine:
        #if timer.getTime() > 30:
        #    trials.finished = True
        #    df = df.iloc[:trials.thisN + 1, :]

        if not os.path.exists(f"data/{participant}"):
            os.makedirs(f"data/{participant}")

        df.to_csv(f"data/{participant}/sub-{int(participant):02}_ses-{int(session):02}_run-{run}_trials.txt", index_label="index", sep=",")
  Routine pause
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    CodeComponent pause_code
      Code Type = Py
      Begin Routine:
        if (not trials.thisN % 15 == 0) or (trials.thisN == 0):
            continueRoutine = False
        else:
            frac_completed = int((trials.thisN + 1) * 100 / len(df))
            break_text.text = f"Break\n\n{frac_completed}% of trials completed\n\nAlert experimenter when you wish to continue"
      Each Frame:
        if key_resp_pause.keys == 'space':
            current_time = timer.getTime()
            margin = current_time - round(current_time) # Should be between 0 and 0.01
            if (margin >= 0) & (margin < 0.01):
                continueRoutine = False
    TextComponent break_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_pause
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine trial
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    CodeComponent image_trial_code
      Code Type = Py
      Begin Routine:
        df.at[trials.thisN, "onset"] = timer.getTime()
        flipped = False
      Each Frame:
        if not flipped:
            movie.setFlipHoriz(True)
            flipped = True
      End Routine:
        df.at[trials.thisN, "duration"] = timer.getTime() - df.at[trials.thisN, "onset"]
    MovieComponent movie
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $os.path.join(video_path, df.at[trials.thisN, "file"])
      size = (1.5, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent key_resp_trial
      allowedKeys = 'b','y'
      disabled = True
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine rating
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    CodeComponent rating_code
      Code Type = Py
      Begin Routine:
        ## Clear key buffer
        keys = event.getKeys(keyList=['1', '2', '3', '4', '6'])
      Each Frame:
        keys = event.getKeys(keyList=['1', '2', '3', '4', '6'])
        rating_dict = {"1": 0, "2": 1, "3": 2, "4": 3, "6": 4}


        if keys:
            df.at[trials.thisN, "rating"] = rating_dict[keys[0]]
            df.at[trials.thisN, "response_time"] = timer.getTime()
            print(f"Rating is: {int(keys[0])}")
            continueRoutine = False
      End Routine:
        if keys is None:
            df.at[trials.thisN, "rating"] = pd.NA
            df.at[trials.thisN, "response_time"] = pd.NA
            print(f"Rating is: {pd.NA}")
    PolygonComponent rating_fixation_square
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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Flow
  Routine waiting_for_scanner
  Routine dummy
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = len(df)
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    Routine trial
    Routine rating
    Routine washout
  LoopTerminator trials
  Routine end
